PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Use version = 3.2.4
  Window size (pixels) = [1280, 720]
  color = $[-1,-1,-1]
  expName = CorsiBlocksGrid
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Routines
  Routine trial
    PolygonComponent blk1
      fillColor = $[1,1,1]
      pos = (-11.475,9.4)
      shape = rectangle
      size = (3.39,3.21)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent blk2
      fillColor = $[1,1,1]
      pos = (-1.85,11.4)
      shape = rectangle
      size = (3.39,3.21)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent blk3
      fillColor = $[1,1,1]
      pos = (16.84,5.4)
      shape = rectangle
      size = (3.39,3.21)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent blk4
      fillColor = $[1,1,1]
      pos = (5.475,5.4)
      shape = rectangle
      size = (3.39,3.21)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent blk5
      fillColor = $[1,1,1]
      pos = (-5.475,1.8)
      shape = rectangle
      size = (3.39,3.21)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent blk6
      fillColor = $[1,1,1]
      pos = (-16.85,1.8)
      shape = rectangle
      size = (3.39,3.21)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent blk7
      fillColor = $[1,1,1]
      pos = (6.85,-4.8)
      shape = rectangle
      size = (3.39,3.21)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent blk8
      fillColor = $[1,1,1]
      pos = (1.475,-2.8)
      shape = rectangle
      size = (3.39,3.21)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent blk9
      fillColor = $[1,1,1]
      pos = (-12.475,-6.8)
      shape = rectangle
      size = (3.39,3.21)
      startVal [time (s)] = 0.0
      units = cm
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    MouseComponent mouse
      clickable = blk1, blk2, blk3, blk4, blk5, blk6, blk7, blk8, blk9
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = doingResponse
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    CodeComponent updateBlocks
      Code Type = Auto->JS
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      Begin Routine:
        # initial state
        blkIndex = 0
        nextSwitch = blockDuration
        doingResponse = False
        currBlock = None

        # store blocks as a dictionary (to switch between name/object)
        blocks = {}
        blocks['blk1']=blk1
        blocks['blk2']=blk2
        blocks['blk3']=blk3
        blocks['blk4']=blk4
        blocks['blk5']=blk5
        blocks['blk6']=blk6
        blocks['blk7']=blk7
        blocks['blk8']=blk8
        blocks['blk9']=blk9

        for blockName in blocks:
            blocks[blockName].color="white"
      Each Frame:
        if not doingResponse and t > nextSwitch:
            if currBlock is not None:
                #reset color of current block
                currBlock.color = 'white'

            # then change current block and make that red
            if blkIndex >= len(sequence):
                doingResponse = True  # no more blocks to show
            else:
                currBlockName = sequence[blkIndex]
                currBlock = blocks[currBlockName]
                currBlock.color = 'red'

                # track time of this change
                nextSwitch += blockDuration
            blkIndex += 1

        # all clicked?
        if len(mouse.clicked_name) >= len(sequence):
            continueRoutine = False

        # update color of clicked
        for blockName in mouse.clicked_name:
            blocks[blockName].color = 'darkgrey'
  Routine ISI
    TextComponent fixCross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      text = +
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  Routine instructions
    TextComponent Instructions_Start
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Hello, this is the memory maze task! During this task pay attention to the order of the boxes flashing on screen and then try to remember the order and click on the boxes that flashed on your computer screen. This will become increasingly difficult with each attempt and very few people get all sequences correct so don’t worry if you can’t remember! Please press the space bar to begin a practice trial.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thank_you
    TextComponent Thankyou
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = End text
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions (2).xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('sequence', ['blk4', 'blk2', 'blk9']), ('blockDuration', 0.6)]),
      OrderedDict([('sequence', ['blk4', 'blk2', 'blk9', 'blk3']), ('blockDuration', 0.6)]),
      OrderedDict([('sequence', ['blk4', 'blk2', 'blk9', 'blk3', 'blk1']), ('blockDuration', 0.6)]),
      OrderedDict([('sequence', ['blk4', 'blk2', 'blk9', 'blk3', 'blk1', 'blk10']), ('blockDuration', 0.6)]),
      OrderedDict([('sequence', ['blk4', 'blk2', 'blk9', 'blk3', 'blk1', 'blk10', 'blk7']), ('blockDuration', 0.6)]),
      OrderedDict([('sequence', ['blk4', 'blk2', 'blk9', 'blk3', 'blk1', 'blk10', 'blk7', 'blk8']), ('blockDuration', 0.6)]),
      OrderedDict([('sequence', ['blk4', 'blk2', 'blk9', 'blk3', 'blk1', 'blk10', 'blk7', 'blk8blk5']), ('blockDuration', 0.6)]),
      OrderedDict([('sequence', ['blk4', 'blk2', 'blk9', 'blk3', 'blk1', 'blk10', 'blk7', 'blk8blk5', 'blk6']), ('blockDuration', 0.6)])]
    Routine ISI
    Routine trial
  LoopTerminator trials
  Routine Thank_you
